PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"BGP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " dayS" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 247, 'future_reward': 29, 'delay': 208},
      {'reward_today': 112, 'future_reward': 99, 'delay': 60},
      {'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 292, 'future_reward': 105, 'delay': 240},
      {'reward_today': 83, 'future_reward': 96, 'delay': 264},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 280, 'future_reward': 33, 'delay': 60},
      {'reward_today': 78, 'future_reward': 17, 'delay': 89},
      {'reward_today': 213, 'future_reward': 226, 'delay': 63},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 45, 'future_reward': 24, 'delay': 47},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 116, 'future_reward': 206, 'delay': 57},
      {'reward_today': 255, 'future_reward': 143, 'delay': 199},
      {'reward_today': 108, 'future_reward': 293, 'delay': 170},
      {'reward_today': 208, 'future_reward': 206, 'delay': 273},
      {'reward_today': 111, 'future_reward': 161, 'delay': 16},
      {'reward_today': 20, 'future_reward': 142, 'delay': 59},
      {'reward_today': 251, 'future_reward': 55, 'delay': 127},
      {'reward_today': 242, 'future_reward': 168, 'delay': 75},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 261, 'future_reward': 234, 'delay': 261},
      {'reward_today': 199, 'future_reward': 70, 'delay': 288},
      {'reward_today': 91, 'future_reward': 186, 'delay': 146},
      {'reward_today': 142, 'future_reward': 135, 'delay': 218},
      {'reward_today': 39, 'future_reward': 100, 'delay': 282}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
    Routine trial
  LoopTerminator trials
